[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "import movies",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "2_import movies",
        "filesPattern": "Falcon*.mrcs",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 39548,
        "samplingRateMode": 0,
        "samplingRate": 3.54,
        "scannedPixelSize": 14.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": null,
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 7200,
        "fileTimeout": 30,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "streamingSocket": false,
        "socketPort": 5000,
        "sourceDataDir": "2_import movies"
    },
    {
        "object.className": "XmippProtOFAlignment",
        "object.id": "55",
        "object.label": "movie alignment",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 0,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "doGPU": false,
        "GPUCore": 0,
        "winSize": 150,
        "groupSize": 1,
        "useAlignment": false,
        "doComputePSD": true,
        "memory": false,
        "doApplyDoseFilter": false,
        "doSaveUnweightedMic": true,
        "applyDosePreAlign": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "105",
        "object.label": "ctffind4",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "resamplePix": true,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.5,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "55.outputMicrographs"
    },
    {
        "object.className": "EmanProtBoxing",
        "object.id": "151",
        "object.label": "eman2 - boxer",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "55.outputMicrographs"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "180",
        "object.label": "3mics",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000082_ProtCTFFind/ctfs_selection.sqlite,",
        "outputClassName": "SetOfMicrographs",
        "inputObject": "105.outputCTF"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "211",
        "object.label": "xmipp3 - manual picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographs": "55.outputMicrographs"
    }

]