[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "import movies",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "2_import movies",
        "filesPattern": "Falcon*.mrcs",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 39548,
        "samplingRateMode": 0,
        "samplingRate": 3.54,
        "scannedPixelSize": 14.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": null,
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 7200,
        "fileTimeout": 30,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "streamingSocket": false,
        "socketPort": 5000,
        "sourceDataDir": "2_import movies"
    },
    {
        "object.className": "XmippProtOFAlignment",
        "object.id": "55",
        "object.label": "movie alignment",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 0,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "doGPU": false,
        "GPUCore": 0,
        "winSize": 150,
        "groupSize": 1,
        "useAlignment": false,
        "doComputePSD": true,
        "memory": false,
        "doApplyDoseFilter": false,
        "doSaveUnweightedMic": true,
        "applyDosePreAlign": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "105",
        "object.label": "ctffind4",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "resamplePix": true,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.5,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "55.outputMicrographs"
    },
    {
        "object.className": "EmanProtBoxing",
        "object.id": "151",
        "object.label": "eman2 - boxer",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "55.outputMicrographs"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "180",
        "object.label": "3mics",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000082_ProtCTFFind/ctfs_selection.sqlite,",
        "outputClassName": "SetOfMicrographs",
        "inputObject": "105.outputCTF"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "211",
        "object.label": "xmipp3 - manual picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographs": "55.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "241",
        "object.label": "extract 3 mics",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "extractNoise": false,
        "extractNoiseNumber": -1,
        "downsampleType": 0,
        "downFactor": 1.0,
        "boxSize": 64,
        "doBorders": false,
        "doSort": false,
        "rejectionMethod": 0,
        "maxZscore": 3,
        "percentage": 5,
        "doRemoveDust": true,
        "thresholdDust": 3.5,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "ctfRelations": "105.outputCTF",
        "inputMicrographs": "151.outputMicrographs"
    },
    {
        "object.className": "XmippParticlePickingAutomatic",
        "object.id": "288",
        "object.label": "xmipp3 - auto-picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "micsToPick": 0,
        "memory": 2.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "xmippParticlePicking": "211."
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "341",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "frameStep": 1,
        "movieStep": 1,
        "useExistingGainImage": null,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1
    },
    {
        "object.className": "ProtImportMicrographs",
        "object.id": "455",
        "object.label": "scipion - import micrographs",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "455_scipion - import micrographs",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "emxFile": null,
        "mdFile": null,
        "sqliteFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "dataStreaming": false,
        "timeout": 7200,
        "fileTimeout": 30,
        "sourceDataDir": "455_scipion - import micrographs"
    },
    {
        "object.className": "XmippProtMovieCorr",
        "object.id": "519",
        "object.label": "xmipp3 - correlation alignment",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "maxFreq": 4.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "604",
        "object.label": "xmipp3 - ctf estimation",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "doInitialCTF": false,
        "doCTFAutoDownsampling": true,
        "doFastDefocus": true,
        "doAutomaticRejection": false,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputMicrographs": "519.outputMicrographs"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "673",
        "object.label": "create subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000604_XmippProtCTFMicrographs/ctfs_state.sqlite,",
        "outputClassName": "SetOfMicrographs",
        "inputObject": "604.outputCTF"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "860",
        "object.label": "xmipp3 - manual picking 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographs": "673.outputMicrographs"
    },
    {
        "object.className": "XmippParticlePickingAutomatic",
        "object.id": "898",
        "object.label": "xmipp3 - auto-picking 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "micsToPick": 0,
        "memory": 2.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "xmippParticlePicking": "860."
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "946",
        "object.label": "extract 3 mics 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "extractNoise": false,
        "extractNoiseNumber": -1,
        "downsampleType": 0,
        "downFactor": 1.0,
        "boxSize": 70,
        "doBorders": false,
        "doSort": true,
        "rejectionMethod": 0,
        "maxZscore": 3,
        "percentage": 5,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": true,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "ctfRelations": "673.outputCTF",
        "inputCoordinates": "898.outputCoordinates2"
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "1012",
        "object.label": "xmipp3 - cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 58,
        "randomInitialization": true,
        "numberOfInitialClasses": 4,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "extraParams": null,
        "doCore": true,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "doStableCore": true,
        "tolerance": 1,
        "computeHierarchy": false,
        "analyzeRejected": false,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "1174.outputParticles"
    },
    {
        "object.className": "XmippProtMovieAverage",
        "object.id": "1077",
        "object.label": "xmipp3 - movie average",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropRegion": 0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "useAlignment": true,
        "splineOrder": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "XmippProtCTFCorrectWiener2D",
        "object.id": "1174",
        "object.label": "xmipp3 - ctf_correct_wiener2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "isIsotropic": true,
        "padding_factor": 2,
        "wiener_constant": -1.0,
        "correctEnvelope": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputParticles": "946.outputParticles"
    },
    {
        "object.className": "EmanProtInitModel",
        "object.id": "1227",
        "object.label": "eman2 - initial model",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "symmetry": "c1",
        "numberOfIterations": 8,
        "numberOfModels": 10,
        "shrink": 1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "inputSet": "1012.outputClasses_stable_core"
    },
    {
        "object.className": "EmanProtInitModel",
        "object.id": "1371",
        "object.label": "eman2 - initial model (copy)",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "symmetry": "d2",
        "numberOfIterations": 8,
        "numberOfModels": 10,
        "shrink": 1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "inputSet": "1012.outputClasses_stable_core"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "1420",
        "object.label": "create subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/001371_EmanProtInitModel/volumes_state.sqlite,",
        "outputClassName": "SetOfVolumes",
        "inputObject": "1371.outputVolumes"
    },
    {
        "object.className": "SpiderProtRefinement",
        "object.id": "1563",
        "object.label": "spider - refinement",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfIterations": 10,
        "alignmentShift": 7,
        "radius": 50,
        "winFrac": 0.95,
        "convergence": 0.05,
        "smallAngle": false,
        "angSteps": "3.3 3 3x2 1.5",
        "angLimits": "2x0 15 8 6 5",
        "angStepSm": 0.5,
        "thetaRange": 2.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "946.outputParticles",
        "input3DReference": "1420.outputVolumes.3"
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "1603",
        "object.label": "xmipp3 - crop/resize volumes",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "doResize": false,
        "resizeOption": 0,
        "resizeSamplingRate": 1.0,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "doWindow": true,
        "windowOperation": 0,
        "cropSize": 5,
        "windowSize": 0,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "1371.outputVolumes"
    },
    {
        "object.className": "SpiderProtAlignAPSR",
        "object.id": "1692",
        "object.label": "spider - align apsr",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "innerRadius": 5,
        "outerRadius": 32,
        "cgOption": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "inputParticles": "1174.outputParticles"
    },
    {
        "object.className": "XmippProtImageOperateVolumes",
        "object.id": "1747",
        "object.label": "xmipp3 - operate volumes",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "operation": 0,
        "isValue": false,
        "value": null,
        "intValue": null,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes2": "1227.outputVolumes",
        "inputVolumes": "1371.outputVolumes"
    },
    {
        "object.className": "XmippProtReconstructHighRes",
        "object.id": "1798",
        "object.label": "xmipp3 - highres",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "doContinue": false,
        "particleRadius": 31,
        "symmetryGroup": "d2",
        "saveSpace": true,
        "nextLowPass": true,
        "nextResolutionCriterion": 0.143,
        "nextResolutionOffset": 2.0,
        "nextSpherical": true,
        "nextPositivity": true,
        "nextReferenceScript": "",
        "nextRemove": true,
        "splitMethod": 1,
        "multiresolution": true,
        "angularMaxShift": 10.0,
        "angularMinTilt": 0.0,
        "angularMaxTilt": 90.0,
        "alignmentMethod": 0,
        "numberOfIterations": 3,
        "restrictReconstructionAngles": false,
        "angularMinTiltReconstruct": 88.0,
        "angularMaxTiltReconstruct": 92.0,
        "globalMethod": 0,
        "maximumTargetResolution": "15 8 4",
        "shiftSearch5d": 7.0,
        "shiftStep5d": 2.0,
        "numberOfPerturbations": 1,
        "numberOfReplicates": 2,
        "contShift": true,
        "contMaxShiftVariation": 2.0,
        "contScale": false,
        "contMaxScale": 0.02,
        "contAngles": true,
        "contGrayValues": false,
        "contMaxGrayScale": 0.5,
        "contMaxGrayShift": 3.0,
        "contDefocus": false,
        "contMaxDefocus": 200.0,
        "contPadding": 2,
        "contSimultaneous": 4,
        "weightSSNR": false,
        "weightContinuous": false,
        "weightJumper": false,
        "weightCC": true,
        "weightCCmin": 0.1,
        "postSymmetryWithinMask": false,
        "postSymmetryWithinMaskType": "i1",
        "postSymmetryHelical": false,
        "postSymmetryHelicalRadius": -1,
        "postSymmetryHelicalDihedral": false,
        "postSymmetryHelicalMinRot": 0.0,
        "postSymmetryHelicalMaxRot": 360.0,
        "postSymmetryHelicalMinZ": 0.0,
        "postSymmetryHelicalMaxZ": 40.0,
        "postScript": "",
        "postSignificantDenoise": true,
        "postFilterBank": true,
        "postLaplacian": true,
        "postDeconvolve": true,
        "postDifference": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputParticles": "1174.outputParticles",
        "inputVolumes": "1420.outputVolumes.3"
    },
    {
        "object.className": "ProtRelionSortParticles",
        "object.id": "1986",
        "object.label": "relion - sort particles",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "maskDiameterA": 248,
        "doLowPass": -1,
        "doInvert": false,
        "doCTF": false,
        "ignoreCTFUntilFirstPeak": false,
        "minZ": 0.0,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputSet": "1012.outputClasses"
    },
    {
        "object.className": "ProtUnblur",
        "object.id": "2084",
        "object.label": "grigoriefflab - unblur",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "doApplyDoseFilter": false,
        "minShiftInitSearch": 2.0,
        "OutRadShiftLimit": 200.0,
        "bfactor": 1500.0,
        "HWVertFourMask": 1,
        "HWHoriFourMask": 1,
        "terminShiftThreshold": 0.1,
        "maximumNumberIterations": 10,
        "doRestoreNoisePwr": true,
        "doVerboseOutput": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "2163",
        "object.label": "create bigger subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/001371_EmanProtInitModel/volumes_state.sqlite,",
        "outputClassName": "SetOfVolumes",
        "inputObject": "1371.outputVolumes"
    },
    {
        "object.className": "SpiderProtRefinement",
        "object.id": "2211",
        "object.label": "spider - refinement 2",
        "object.comment": "",
        "runName": null,
        "runMode": 1,
        "numberOfIterations": 10,
        "alignmentShift": 7,
        "radius": 30,
        "winFrac": 0.95,
        "convergence": 0.05,
        "smallAngle": false,
        "angSteps": "3.3 3 3x2 1.5",
        "angLimits": "2x0 15 8 6 5",
        "angStepSm": 0.5,
        "thetaRange": 2.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "input3DReference": "1371.outputVolumes.3",
        "inputParticles": "1986.outputParticles"
    },
    {
        "object.className": "XmippProtStructureMapping",
        "object.id": "2253",
        "object.label": "xmipp3 - structure mapping",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputVolumes": [
            "1420.outputVolumes.3",
            "1227.outputVolumes.3"
        ],
        "keepingOutputFiles": false,
        "maskMode": 0,
        "maskThreshold": 0.01,
        "pseudoAtomRadius": 2.0,
        "pseudoAtomTarget": 2.0,
        "rigidAlignment": true,
        "optimizeScale": false,
        "numberOfModes": 20,
        "cutoffMode": 1,
        "rc": 8.0,
        "rcPercentage": 95.0,
        "collectivityThreshold": 0.15,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "2296",
        "object.label": "relion - particles extraction",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 70,
        "doRescale": false,
        "rescaledSize": null,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": -1,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "ctfRelations": "604.outputCTF",
        "inputCoordinates": "860.outputCoordinates"
    },
    {
        "object.className": "SparxGaussianProtPicking",
        "object.id": "2414",
        "object.label": "eman2 - sparx gaussian picker",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "boxSize": 70,
        "lowerThreshold": 1.0,
        "higherThreshold": 30.0,
        "gaussWidth": 1.0,
        "inputMicrographs": "673.outputMicrographs"
    },
    {
        "object.className": "XmippProtConsensusPicking",
        "object.id": "2461",
        "object.label": "xmipp3 - consensus picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputCoordinates": [
            "2414.outputCoordinates",
            "898.outputCoordinates2"
        ],
        "consensusRadius": 70,
        "consensus": -1,
        "hostName": "localhost",
        "numberOfThreads": 4
    },
    {
        "object.className": "ProtMonitorISPyB",
        "object.id": "2541",
        "object.label": "ispyb - monitor to ISPyB",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "2",
            "519",
            "604"
        ],
        "samplingInterval": 60,
        "visit": "cm14451-1",
        "db": 1
    },
    {
        "object.className": "XmippProtExtractMovieParticles",
        "object.id": "2573",
        "object.label": "xmipp3 - movie extract particles",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "boxSize": 70,
        "applyAlignment": false,
        "frame0": 1,
        "frameN": 15,
        "doBorders": true,
        "doRemoveDust": false,
        "thresholdDust": 3.5,
        "doInvert": false,
        "doNormalize": false,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies",
        "inputCoordinates": "898.outputCoordinates2"
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "2741",
        "object.label": "xmipp3 - ctf estimation (copy)",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "doInitialCTF": false,
        "doCTFAutoDownsampling": true,
        "doFastDefocus": true,
        "doAutomaticRejection": false,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputMicrographs": "519.outputMicrographs"
    },
    {
        "object.className": "ProtMonitorISPyB",
        "object.id": "2786",
        "object.label": "ispyb - monitor to ISPyB (copy)",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "2",
            "519",
            "604"
        ],
        "samplingInterval": 60,
        "visit": "cm14451-1",
        "db": 1
    }
]